PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = ContextChoice
  eyetracker = MouseGaze
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine instructions
    TextComponent Disclaimer
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        In some trials, the images will disapear before the sound is emmited, while in some other trials the images will be always present.

        After each decision, some questions will be asked.

        Press the mouse to continue.
    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = decision
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent ContextPresentation
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4.0
      text [set every repeat] = $written_context
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    PolygonComponent FixationCross
      fillColor = black
      lineColor = black
      lineWidth = 0.6
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
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    ImageComponent stimA
      image [set every repeat] = $imageA
      pos = (-0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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    ImageComponent stimB
      image [set every repeat] = $imageB
      pos = (0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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    PolygonComponent squareA
      lineColor = lime
      lineWidth = 5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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    PolygonComponent squareB
      lineColor = lime
      lineWidth = 5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
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    EyetrackerRecordComponent recEYE_S
      startVal [time (s)] = 5
      stopVal [time (s)] = 8
      syncScreenRefresh = False
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    EmotivRecordingComponent recEEG_S
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
      syncScreenRefresh = False
    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        trial_counter = 0
      Begin Routine:
        trial_counter = trial_counter + 1
        print(trial_counter)
  Routine confidence
    TextComponent question_confidence
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      text = How confident are you with your choice?
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    SliderComponent slider_confidence
      borderColor = grey
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = ("Nothing","Absolutely")
      letterHeight = 0.05
      pos = (0, 0.0)
      size = (1.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      styles = radio
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = True
  Routine valueA
    TextComponent question_valueA
      color = Black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      text = How would you value this option in the given context?
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    SliderComponent slider_valueA
      borderColor = grey
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = ("-","+")
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      storeRatingTime = False
      styles = radio
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    ImageComponent stimA_2
      image [set every repeat] = $imageA
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
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  Routine valueB
    TextComponent question_valueB
      color = Black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      text = How would you value this option in the given context?
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    SliderComponent slider_valueB
      borderColor = grey
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = ("-","+")
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      styles = radio
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    ImageComponent stimB_2
      image [set every repeat] = $imageB
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
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    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        win.mouseVisible = False
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = THREE_POINTS
    units = from exp settings
  Routine LookAtN
    PolygonComponent squareA_2
      lineColor = lime
      lineWidth = 5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    PolygonComponent squareB_2
      lineColor = lime
      lineWidth = 5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_LaN
      allowedKeys = 'left','right'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 25
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    MouseComponent resp_LaN
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 5
      stopVal [duration (s)] = 25
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    EyetrackerRecordComponent recEYE_LaN
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      syncScreenRefresh = False
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    EmotivRecordingComponent recEEG_LaN
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
  Routine LookAtS
    ImageComponent stimA_3
      image [set every repeat] = $imageA
      pos = (-0.5, 0)
      size [set every frame] = (0.25*LaN, 0.25*LaN)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    ImageComponent stimB_3
      image [set every repeat] = $imageB
      pos = (0.5, 0)
      size [set every frame] = (0.25*LaN, 0.25*LaN)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    PolygonComponent squareA_5
      lineColor = lime
      lineWidth = 5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    PolygonComponent squareB_3
      lineColor = lime
      lineWidth = 5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
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    KeyboardComponent key_resp_LaS
      allowedKeys = 'left','right'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 5
      stopVal [duration (s)] = 25
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    MouseComponent resp_LaS
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 5
      stopVal [duration (s)] = 25
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 5
      stopVal [duration (s)] = 0.5
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    EyetrackerRecordComponent recEYE_LaS
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      syncScreenRefresh = False
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    EmotivRecordingComponent recEEG_LaS
      disabled = True
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      syncScreenRefresh = False
  Routine cal_instructions
    TextComponent calibration_txt
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Your gaze position will be calibrated now. For that, some green dots will appear in the screen. You have to visually follow them as they move and fixate your gaze when they stop.

        Press the mouse to continue.
    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = decision
      startVal [time (s)] = 0.0
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  Routine context_instructions
    TextComponent Disclaimer_2
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You are about to do a decision task. In each trial you will be presented with one question and a pair of options depicted with images, one to the left and another one to the right.

        Press the mouse to continue.
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = decision
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = False
      Each Frame:
        win.mouseVisible = False
  Routine FP_instructions
    TextComponent Disclaimer_3
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Before option presentation, a + like this one will appear in the screen:






        You have to fixate on it until it dissapears.

        Press the mouse to continue.
    PolygonComponent FixationCross_2
      fillColor = black
      lineColor = black
      lineWidth = 0.6
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = decision
      startVal [time (s)] = 0.0
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  Routine decision_instructions
    TextComponent Disclaimer_4
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        You will not be able to report your choice at the beggining. Once you hear a sound, you can express your decision by clicking the left key in the mouse if your chosen option is the left one, and viceversa.

        Press the mouse to continue.
    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = final
      saveParamsClickable = decision
      startVal [time (s)] = 0.0
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  Routine trial_example
    TextComponent example_instr
      color = black
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Now you will see an example
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    TextComponent Context_ex
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4.0
      text [set every repeat] = Where would you spend a week with your parents-in-law?
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    PolygonComponent FC_ex
      fillColor = black
      lineColor = black
      lineWidth = 0.6
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
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    ImageComponent stimA_ex
      image [set every repeat] = res/minefield.jpg
      pos = (-0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 3
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    ImageComponent stimB_ex
      image = res/sexshop.jpg
      pos = (0.5, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 3
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    PolygonComponent squareA_ex
      lineColor = lime
      lineWidth = 5
      pos = (-0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 33
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    PolygonComponent squareB_ex
      lineColor = lime
      lineWidth = 5
      pos = (0.5, 0)
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 8
      stopVal [duration (s)] = 33
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    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 13
      stopVal [duration (s)] = 0.5
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    MouseComponent resp_Ex
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 13
      stopVal [duration (s)] = 28
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    TextComponent tip_ex
      color = black
      letterHeight = 0.035
      pos = (0, 0.5)
      startVal [time (s)] = 13
      stopVal [duration (s)] = 3
      text = Now you can report the selected option by clicking the left button in the mouse if the chosen option is the left, or the right button in the mouse if the chosen option is the right!
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  Routine assessment_ex
    TextComponent question_confidence_2
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      text = How confident are you with your choice?
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    SliderComponent slider_confidence_2
      borderColor = grey
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = ("Nothing","Absolutely")
      letterHeight = 0.05
      pos = (0, 0.0)
      size = (1.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      styles = radio
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        win.mouseVisible = False
      Begin Routine:
        win.mouseVisible = True
    TextComponent tip_ex_2
      color = black
      letterHeight = 0.035
      pos = (0, -0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 6
      text = Now click on the ammount of confidence you feel after making the decision
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  Routine valueA_ex
    TextComponent question_valueA_2
      color = Black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      text = How would you value this option in the given context?
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    SliderComponent slider_valueA_2
      borderColor = grey
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = ("-","+")
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    ImageComponent stimA_4
      image [set every repeat] = res/minefield.jpg
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
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  Routine valueB_ex
    TextComponent question_valueB_2
      color = Black
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      text = How would you value this option in the given context?
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    SliderComponent slider_valueB_2
      borderColor = grey
      color = black
      forceEndRoutine = True
      granularity = 1
      labels = ("-","+")
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 6
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (-10,-9,-8,-7,-6,-5,-4,-3,-2,-1,0,1, 2, 3, 4, 5,6,7,8,9,10)
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    ImageComponent stimB_4
      image [set every repeat] = res/sexshop.jpg
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [time (s)] = 6
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    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        win.mouseVisible = False
Flow
  Routine context_instructions
  Routine FP_instructions
  Routine decision_instructions
  Routine instructions
  Routine trial_example
  Routine assessment_ex
  Routine valueA_ex
  Routine valueB_ex
  Routine cal_instructions
  EyetrackerCalibrationRoutine calibration
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 160Loop.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'written_context': '"Which food brand would you rather be the commercial face of?"', 'imageA': 'images/0a.jpg', 'imageB': 'images/0b.jpg', 'LaN': 0},
      {'written_context': '" You are going to spend two days without..."', 'imageA': 'images/1a.jpg', 'imageB': 'images/1b.jpg', 'LaN': 0},
      {'written_context': '" You are going to travel twenty minutes by... "', 'imageA': 'images/2a.jpg', 'imageB': 'images/2b.jpg', 'LaN': 1},
      {'written_context': '" Which sense would you rather lose because of an accident? "', 'imageA': 'images/3a.jpg', 'imageB': 'images/3b.jpg', 'LaN': 0},
      {'written_context': '" Your roommate plays this instrument for three hours daily... "', 'imageA': 'images/4a.jpg', 'imageB': 'images/4b.jpg', 'LaN': 1},
      {'written_context': '" You are alone on an island and only have... "', 'imageA': 'images/5a.jpg', 'imageB': 'images/5b.jpg', 'LaN': 1},
      {'written_context': '" During a trip in the wild would you rather urinate in?"', 'imageA': 'images/6a.jpg', 'imageB': 'images/6b.jpg', 'LaN': 1},
      {'written_context': '" You are stung by a non-dangerous... "', 'imageA': 'images/7a.jpg', 'imageB': 'images/7b.jpg', 'LaN': 1},
      {'written_context': '" Which animal would you be rather caged with?"', 'imageA': 'images/8a.jpg', 'imageB': 'images/8b.jpg', 'LaN': 0},
      {'written_context': '" You need to clean a big pile of dirt with only... "', 'imageA': 'images/9a.jpg', 'imageB': 'images/9b.jpg', 'LaN': 1}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
    Routine trial
    Routine LookAtS
    Routine confidence
    Routine valueA
    Routine valueB
  LoopTerminator trials
